PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s' % (expInfo['Participante'], expInfo['Participante'], expInfo['date'])
  Experiment info = {'Participante': '', 'Edad': '', 'Lateralidad': "['Derecha','Izquierda', '']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = semantic-decision
  keyboardBackend = ioHub
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Routines
  Routine practice_trials_instructions
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    TextComponent practice_instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Esto es un experimento de DECISIÓN LÉXICA

        En la pantalla irán apareciendo palabras y no palabras. Debe decidir si es una palabra real o inventada

        Hagalo lo más rápido que pueda,
        intentando no cometer errores

        Presiona ESPACIO para continuar.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_trials_instructions_2
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    TextComponent practice_instructions_text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora vamos a hacer algunos ensayos de práctica. Respondé lo más rápido que puedas sin cometer errores.

        Presioná ESPACIO para continuar.
    KeyboardComponent key_resp_practice_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fx_cross_practice
    CodeComponent code_5
      Code Type = Py
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      Before Experiment:
        # Fixation cross duration
        fixDurMin = 0.6 # minimum: 600 ms
        fixDurMax = 0.8 # maximum: 800 ms

        # Blank duration
        fixDurBlankMin = 0.2 # minimum: 200 ms
        fixDurBlankMax = 0.3 # maximum: 300 ms
      Begin Routine:
        # Fixation cross duration for this trial
        fixDur = np.random.uniform(fixDurMin, fixDurMax)  # random between minimum and maximum
        fixDurFrames = round(fixDur * 60)
        thisExp.addData('fixation_duration',fixDurFrames/60)
        thisExp.addData('fixation_n_frames',fixDurFrames)

        # Fixation cross duration for this trial
        fixBlankDur = np.random.uniform(fixDurBlankMin, fixDurBlankMax) # random between minimum and maximum
        fixBlankDurFrames = round(fixBlankDur * 60)
        thisExp.addData('blank_duration',fixBlankDurFrames/60)
        thisExp.addData('blank_n_frames',fixBlankDurFrames)
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    TextComponent fx_cross_1
      durationEstim = 0.7
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (frames)] = fixDurFrames
      text [set every repeat] = +
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    TextComponent blank_random
      durationEstim = 0.15
      letterHeight = 0.05
      startEstim = 0.7
      startVal [condition] = fx_cross_1.status==FINISHED
      stopVal [duration (frames)] = fixBlankDurFrames
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  Routine stim_practice
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    TextComponent practice_stimulus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $practiceWord
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    KeyboardComponent key_resp_practice_stim
      allowedKeys = 'right','left'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        serialconection._send_pulse_to_arduino()
  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        feedback_text = 'CORRECTO' if correctAns == key_resp_practice_stim.keys else 'INCORRECTO'
    TextComponent feedback_text_comp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedback_text
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  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora comenzará la tarea. Respondé lo más rápido que puedas sin cometer errores.

        Presioná ESPACIO para continuar.
    KeyboardComponent key_resp_instructiones
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fx_cross_routine
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    TextComponent fx_cross_text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.3
      text = +
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  Routine stim
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    TextComponent stimulus
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 3
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        serialconection._send_pulse_to_arduino()
  Routine acknowledgment
    RoutineSettingsComponent acknowledgment
      saveStartStop = False
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    TextComponent text_ending
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!

        Pulse ESPACIO para finalizar.
    KeyboardComponent key_resp_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_trials_instructions_3
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Cuando sea una PALABRA REAL, pulse la flecha IZQUIERDA.

        Cuando sea una PALABRA INVENTADA, pulse la flecha DERECHA.

        Pulse ESPACIO para continuar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pause
    RoutineSettingsComponent pause
      skipIf = trials.thisTrialN % 65 != 64
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Cuando estes listo para continuar presione ESPACIO.
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pulses_trial_instructions
    RoutineSettingsComponent pulses_trial_instructions
      saveStartStop = False
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    TextComponent pulses_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        A continuacion se mandaran 5 pulsos al equipo, acompañados de un sonido espaciados con 2 segundos.

        Pulse ESPACIO y espere 2 segundos.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank_2
    RoutineSettingsComponent blank_2
      saveStartStop = False
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    TextComponent blank
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine pulses
    RoutineSettingsComponent pulses
      saveStartStop = False
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    SoundComponent sound_1
      saveStartStop = False
      sound = A
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_2
      Code Type = Py
      Before Experiment:
        from pulseSender import PulseSender
        import pandas as pd
        import serial.tools.list_ports

        def list_serial_ports():
            ports = serial.tools.list_ports.comports()
            arduino_ports = []

            for port in ports:
                # You can add more checks here based on the specific attributes of your Arduino
                if 'Arduino' in port.description or 'CH340' in port.description:
                    arduino_ports.append(port.device)

            return arduino_ports[0]
      Begin Experiment:
         # Configure connection to the board
        port = list_serial_ports()
        baud_rate = 115200
        serialconection = PulseSender(port, baud_rate)
      Begin Routine:
        serialconection._send_pulse_to_arduino()
      End Experiment:
        serialconection._serial.close()

        tempFileName = thisExp.dataFileName + '_TEMP.csv'
        thisExp.saveAsWideText(tempFileName)
        df = pd.read_csv(tempFileName, delimiter=',')

        df.to_csv(thisExp.dataFileName + '_spanish.csv', sep=';', decimal=',', index=False)

        os.remove(tempFileName)
  Routine pulses_response
    RoutineSettingsComponent pulses_response
      saveStartStop = False
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Si vio los 5 pulsos en la señal, presione ESPACIO para continuar.

        Si no, presione ESC y DESCONECTE el dispositivo serial.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine pulses_trial_instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    Routine blank_2
    Routine pulses
  LoopTerminator trials_2
  Routine pulses_response
  Routine practice_trials_instructions
  Routine practice_trials_instructions_3
  Routine practice_trials_instructions_2
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = resources/practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'practiceWord': 'soltando'},
      {'practiceWord': 'vujando'},
      {'practiceWord': 'trepando'},
      {'practiceWord': 'talando'},
      {'practiceWord': 'comiendo'},
      {'practiceWord': 'lipando'},
      {'practiceWord': 'lanzando'},
      {'practiceWord': 'eligiendo'},
      {'practiceWord': 'silmiendo'},
      {'practiceWord': 'logrando'}]
    Routine fx_cross_practice
    Routine stim_practice
    Routine feedback
  LoopTerminator trials_practice
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = resources/stimuli.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Word': 'afrentando'},
      {'Word': 'permitiendo'},
      {'Word': 'comparando'},
      {'Word': 'puliendo'},
      {'Word': 'jaleando'},
      {'Word': 'recelando'},
      {'Word': 'tastando'},
      {'Word': 'masajeando'},
      {'Word': 'juzgando'},
      {'Word': 'plesiendo'},
      {'Word': 'cazando'},
      {'Word': 'asegurando'},
      {'Word': 'roniando'},
      {'Word': 'irmadiendo'},
      {'Word': 'admirando'},
      {'Word': 'abanicando'},
      {'Word': 'perdiendo'},
      {'Word': 'cayendo'},
      {'Word': 'tornando'},
      {'Word': 'cubriendo'},
      {'Word': 'alardeando'},
      {'Word': 'sevorando'},
      {'Word': 'creciendo'},
      {'Word': 'cerrando'},
      {'Word': 'dostiendo'},
      {'Word': 'enjuagando'},
      {'Word': 'amenizando'},
      {'Word': 'eludiendo'},
      {'Word': 'lusando'},
      {'Word': 'chagando'},
      {'Word': 'lamentando'},
      {'Word': 'adorando'},
      {'Word': 'dellecando'},
      {'Word': 'suponiendo'},
      {'Word': 'podando'},
      {'Word': 'consumiendo'},
      {'Word': 'bacurando'},
      {'Word': 'fasantando'},
      {'Word': 'trucando'},
      {'Word': 'imaginando'},
      {'Word': 'marchando'},
      {'Word': 'cutruendo'},
      {'Word': 'gestando'},
      {'Word': 'impidiendo'},
      {'Word': 'sabando'},
      {'Word': 'imnontando'},
      {'Word': 'circulando'},
      {'Word': 'rasurando'},
      {'Word': 'tentando'},
      {'Word': 'acoriendo'},
      {'Word': 'constatando'},
      {'Word': 'bostezando'},
      {'Word': 'sontuendo'},
      {'Word': 'valiendo'},
      {'Word': 'deromiendo'},
      {'Word': 'inventando'},
      {'Word': 'suturando'},
      {'Word': 'gozando'},
      {'Word': 'sintiendo'},
      {'Word': 'bamoceando'},
      {'Word': 'rajando'},
      {'Word': 'admitiendo'},
      {'Word': 'cosmando'},
      {'Word': 'tronchando'},
      {'Word': 'intentando'},
      {'Word': 'avopiendo'},
      {'Word': 'protegiendo'},
      {'Word': 'odiando'},
      {'Word': 'trascando'},
      {'Word': 'colgando'},
      {'Word': 'tocando'}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
    Routine fx_cross_practice
    Routine stim
    Routine pause
  LoopTerminator trials
  Routine acknowledgment
